CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag and drop all images to be analyzed']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['Use this module to extract text-based information about the images.', 'This information will be used to annotate the outputs.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:W(?P<wellNum>.*)--(?P<genotype>.*)--(?P<assay>.*)--(?P<minutes>..)min\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Select the images to be analyzed, based on their names, and give them a name to identify them in CellProfiler.']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:raw_data
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['Let us group the images by well. This means that all images in a well will be analyzed as belonging to the same time lapse.']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:wellNum

IdentifyPrimaryObjects:[module_num:5|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notes:['Segment organoids.', 'Let us ignore small dots (cell debris) and organoids touching the edge of the image (those cannot be accurately measured)']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
    Select the input image:raw_data
    Name the primary objects to be identified:organoids
    Typical diameter of objects, in pixel units (Min,Max):20,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:200
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
TrackObjects:[module_num:6|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notes:['Track organoids across muliple frames. This assures that each organoid is always given the same ID regardless of the time lapse frame it is in.', 'Let us only consider organoids that are found in all 8 frames (lifetime must be > 7 time points)']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
    Choose a tracking method:Overlap
    Select the objects to track:organoids
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    Maximum pixel distance to consider matches:10
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:organoids_tracked
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:11
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
MeasureObjectSizeShape:[module_num:7|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notes:['Measure the area of each organoid.']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
    Select objects to measure:organoids
    Calculate the Zernike features?:No

CalculateMath:[module_num:8|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notes:['Convert area units: from pixel^2 to micron^2', 'In this example, the pixel pitch is 1.5 micron; so we multiply all area values by 1.5^2 = 2.25']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
    Name the output measurement:area_micronsq
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:organoids
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:2.25
    Raise the power of above operand by:1.0
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    Multiply the above operand by:10.1
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:9|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notes:['Save image with connected component analysis labels (after tracking)']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
    Select the type of image to save:Image
    Select the image to save:organoids_tracked
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:--labels_tracked
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|analysis--cellprofiler/W\g<wellNum>--\g<genotype>--\g<assay>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:10|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notes:['Output measurements to Excel']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|analysis--cellprofiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_assay,Image|Metadata_genotype,Image|Metadata_wellNum,Image|Metadata_minutes,organoids|TrackObjects_Label_10,organoids|Math_area_micronsq
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:organoids
    Combine these object measurements with those of the previous object?:No
    File name:objects.csv
    Use the object name for the file name?:No
